---
API: 2
OpenSesame: 3.0.7
Platform: posix
---
set width 1280
set uniform_coordinates yes
set title "Nouvelle expérience"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 720
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set expyriment_opengl no
set experiment_path "/Users/masala/Documents/programming/git/brassJointGoal"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define inline_script B_video
	set description "Executes Python code"
	___run__
	import cv2
	import numpy
	import pygame
	import os
	
	#Set the cwd as the exp file directory
	os.chdir(exp.experiment_path)
	
	#check whether the correct backend is used
	if self.get('canvas_backend') == 'legacy':
		surface = exp.surface
	elif self.get('canvas_backend') == 'xpyriment':
		surface = exp.window
	else:
		raise Exception('This script requires legacy or xpyriment (no opengl)')
	
	#create the pygame clock object
	FPSCLOCK=pygame.time.Clock()
	
	#load background images & get their dimensions
	BG_neutral = pygame.image.load('lightbulb0.jpg')
	BG_i = pygame.image.load('imitate.jpg')
	BG_ci = pygame.image.load('counterimitate.jpg')
	BG_black = pygame.image.load('Red_background.jpg')
	BG_Rect = BG_neutral.get_rect()
	BG_Recti = BG_i.get_rect()
	BG_Rectci = BG_ci.get_rect()
	
	#create the list for timing the while loop
	time_stamp = []
	
	#Set the accuracy variable
	correct = 0
	end_time = 0
	newKey = 0
	
	# Full path to the video file & open the file
	path = pool[self.get('video')]
	video = cv2.VideoCapture(path)
	
	#initiate the video with a keypress, start the clock and set the background
	key = None
	while key == None:
	   for event in pygame.event.get():
		   if event.type == pygame.MOUSEBUTTONDOWN:
			   pygame.time.delay(1000)
			   pygame.event.get()
			   start_time = self.time()
			   key = event.button
			   BG_Rect.center = surface.get_rect().center
			   surface.blit(BG_neutral, BG_Rect)
			   pygame.display.update
	
	
	################################################################################	
	############################initiate the video loop#############################
	################################################################################
	if self.get('contingency')==1:
		BG_Rect.center = surface.get_rect().center
		surface.blit(BG_i, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
	elif self.get('contingency')==2:
		BG_Rect.center = surface.get_rect().center
		surface.blit(BG_ci, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
	pygame.display.flip()
	pygame.time.delay(2000)
	go = True
	red = True
	while go:
		
		#set the frame rate to 20fps and wait if too fast 
		FPSCLOCK.tick_busy_loop(20)
		
		#get the the start time of each iteration in the loop and appends them in a list
		iteration = self.time()
		time_stamp.append(iteration)
		
		# Get a frame and break the loop if we failed, usually because the video ended.
		success, frame = video.read()
		if not success:
			end_video = self.time()
			break
			
		#for some reasons the frames appeared inverted & flipped
		frame = numpy.fliplr(frame)
		frame = numpy.rot90(frame)
		
		# The video uses BGR colors and PyGame needs RGB
		frame = cv2.cvtColor(frame, cv2.COLOR_BGR2RGB)
		
		# Create a PyGame surface
		surf = pygame.surfarray.make_surface(frame)
	
		# Get key release time
		for event in pygame.event.get():
			
			if event.type == pygame.QUIT:
				pygame.quit()
				
			elif event.type == pygame.MOUSEBUTTONUP:
				
				#get pygame key name
				newKey=event.button
				if red == True:
					if newKey == self.get('contingent_action'):
						end_time = self.time()
						correct = 1
					else:
						end_time = self.time()
						surface.blit(BG_black,BG_Rect)
						pygame.display.update
						red = False
						correct = 0
		# Show the PyGame surface!
		surface.blit(surf, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
		pygame.display.flip()
	
	################################################################################	
	###########################Compute experimental variables#######################
	################################################################################
	
	#Get the delay between first frame and loop initiation time
	first_frame = time_stamp[0]
	delay = first_frame-start_time
	
	#compute the duration of the video for timing verification purposes
	duree_video = end_video-start_time
	
	#Create the key release time variable
	rt = end_time-start_time
	
	
	
	################################################################################
	#########################Create Opensesame variables############################
	################################################################################
	
	exp.set('accuracy', correct)
	exp.set('keyresponse', newKey)
	exp.set('time_delay_RT', delay)
	exp.set('video_duration', duree_video)
	exp.set('keyreleaseRT', rt)
	exp.set('Trial','Baseline')
	exp.set('Group','jointLast')
	
	################################################################################
	#############################Print some variables###############################
	################################################################################
	
	print '-------------------------- Trial %d --------------------------------' % (var.count_Trial_1+1)
	print '%d ms delay' % (delay)
	print 'the video lasted %d ms' % (duree_video)
	print '%s was released after %d ms' % (newKey, rt)
	if correct == 1:
		print 'The trial was correct'
	else:
		print 'The trial was incorrect'
	__end__
	set _prepare ""

define inline_script B_video_1
	set description "Executes Python code"
	___run__
	import cv2
	import numpy
	import pygame
	import os
	
	#Set the cwd as the exp file directory
	os.chdir(exp.experiment_path)
	print "Kurva"
	#check whether the correct backend is used
	if self.get('canvas_backend') == 'legacy':
		surface = exp.surface
	elif self.get('canvas_backend') == 'xpyriment':
		surface = exp.window
	else:
		raise Exception('This script requires legacy or xpyriment (no opengl)')
	
	#create the pygame clock object
	FPSCLOCK=pygame.time.Clock()
	print "Kurva2"
	#load background images & get their dimensions
	BG_neutral = pygame.image.load('lightbulb0.jpg')
	BG_i = pygame.image.load('imitate.jpg')
	BG_ci = pygame.image.load('counterimitate.jpg')
	BG_black = pygame.image.load('Red_background.jpg')
	BG_Rect = BG_neutral.get_rect()
	BG_Recti = BG_i.get_rect()
	BG_Rectci = BG_ci.get_rect()
	print "Kurva3"
	#create the list for timing the while loop
	time_stamp = []
	
	#Set the accuracy variable
	correct = 0
	end_time = 0
	newKey = 0
	
	# Full path to the video file & open the file
	path = pool[self.get('video')]
	video = cv2.VideoCapture(path)
	
	#initiate the video with a keypress, start the clock and set the background
	key = None
	while key == None:
	   for event in pygame.event.get():
		   if event.type == pygame.MOUSEBUTTONDOWN:
			   pygame.time.delay(1000)
			   pygame.event.get()
			   start_time = self.time()
			   key = event.button
			   BG_Rect.center = surface.get_rect().center
			   surface.blit(BG_neutral, BG_Rect)
			   pygame.display.update
	
	
	################################################################################	
	############################initiate the video loop#############################
	################################################################################
	if self.get('contingency')==1:
		BG_Rect.center = surface.get_rect().center
		surface.blit(BG_i, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
	elif self.get('contingency')==2:
		BG_Rect.center = surface.get_rect().center
		surface.blit(BG_ci, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
	pygame.display.flip()
	pygame.time.delay(2000)
	go = True
	red = True
	while go:
		
		#set the frame rate to 20fps and wait if too fast 
		FPSCLOCK.tick_busy_loop(20)
		
		#get the the start time of each iteration in the loop and appends them in a list
		iteration = self.time()
		time_stamp.append(iteration)
		
		# Get a frame and break the loop if we failed, usually because the video ended.
		success, frame = video.read()
		if not success:
			end_video = self.time()
			break
			
		#for some reasons the frames appeared inverted & flipped
		frame = numpy.fliplr(frame)
		frame = numpy.rot90(frame)
		
		# The video uses BGR colors and PyGame needs RGB
		frame = cv2.cvtColor(frame, cv2.COLOR_BGR2RGB)
		
		# Create a PyGame surface
		surf = pygame.surfarray.make_surface(frame)
	
		# Get key release time
		for event in pygame.event.get():
			
			if event.type == pygame.QUIT:
				pygame.quit()
				
			elif event.type == pygame.MOUSEBUTTONUP:
				
				#get pygame key name
				newKey=event.button
				if red == True:
					if newKey == self.get('contingent_action'):
						end_time = self.time()
						correct = 1
					else:
						end_time = self.time()
						surface.blit(BG_black,BG_Rect)
						pygame.display.update
						red = False
						correct = 0
		# Show the PyGame surface!
		surface.blit(surf, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
		pygame.display.flip()
	
	################################################################################	
	###########################Compute experimental variables#######################
	################################################################################
	
	#Get the delay between first frame and loop initiation time
	first_frame = time_stamp[0]
	delay = first_frame-start_time
	
	#compute the duration of the video for timing verification purposes
	duree_video = end_video-start_time
	
	#Create the key release time variable
	rt = end_time-start_time
	
	
	
	################################################################################
	#########################Create Opensesame variables############################
	################################################################################
	
	exp.set('accuracy', correct)
	exp.set('keyresponse', newKey)
	exp.set('time_delay_RT', delay)
	exp.set('video_duration', duree_video)
	exp.set('keyreleaseRT', rt)
	exp.set('Trial','Baseline_1')
	exp.set('Group','jointLast')
	
	################################################################################
	#############################Print some variables###############################
	################################################################################
	
	print '-------------------------- Trial %d --------------------------------' % (var.count_Trial_1+1)
	print '%d ms delay' % (delay)
	print 'the video lasted %d ms' % (duree_video)
	print '%s was released after %d ms' % (newKey, rt)
	if correct == 1:
		print 'The trial was correct'
	else:
		print 'The trial was incorrect'
	__end__
	set _prepare ""

define loop Baseline
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_1
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response "1"
	setcycle 0 contingency "1"
	setcycle 0 video "1_index.avi"
	setcycle 0 compatibility "compatible"
	setcycle 0 contingent_action "1"
	setcycle 1 correct_response "3"
	setcycle 1 contingency "1"
	setcycle 1 video "1_middle.avi"
	setcycle 1 compatibility "compatible"
	setcycle 1 contingent_action "3"
	setcycle 2 correct_response "3"
	setcycle 2 contingency "2"
	setcycle 2 video "2_index.avi"
	setcycle 2 compatibility "incompatible"
	setcycle 2 contingent_action "3"
	setcycle 3 correct_response "1"
	setcycle 3 contingency "2"
	setcycle 3 video "2_middle.avi"
	setcycle 3 compatibility "incompatible"
	setcycle 3 contingent_action "1"
	run Trial_1

define loop Baseline_1
	set source_file ""
	set source table
	set skip 0
	set repeat 20
	set order random
	set offset no
	set item Trial_1_1
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response "1"
	setcycle 0 contingency "1"
	setcycle 0 video "1_index.avi"
	setcycle 0 compatibility "compatible"
	setcycle 0 contingent_action "1"
	setcycle 1 correct_response "3"
	setcycle 1 contingency "1"
	setcycle 1 video "1_middle.avi"
	setcycle 1 compatibility "compatible"
	setcycle 1 contingent_action "3"
	setcycle 2 correct_response "3"
	setcycle 2 contingency "2"
	setcycle 2 video "2_index.avi"
	setcycle 2 compatibility "incompatible"
	setcycle 2 contingent_action "3"
	setcycle 3 correct_response "1"
	setcycle 3 contingency "2"
	setcycle 3 video "2_middle.avi"
	setcycle 3 compatibility "incompatible"
	setcycle 3 contingent_action "1"
	run Trial_1_1

define sketchpad Black_screen
	set duration 1500
	set description "Displays stimuli"

define sketchpad Black_screen_1
	set duration 1500
	set description "Displays stimuli"

define sketchpad Black_screen_2
	set duration 1500
	set description "Displays stimuli"

define sketchpad Bye
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="The experiment has now ended. <br /><br />Thanks for your participation!" x=0 y=0 z_index=0

define sketchpad Fixation
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please press down the 'left' & 'right' buttons of the mouse now!" x=0 y=0 z_index=0

define sketchpad Fixation_1
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please press down the 'left' & 'right' buttons of the mouse now!" x=0 y=0 z_index=0

define sketchpad Fixation_2
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please press down the 'left' & 'right' buttons of the mouse now!" x=0 y=0 z_index=0

define sketchpad Instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In the following experiment, you will be presented with short videos of finger movements.<br /><br />To start a video, hold down both the 'left' & 'right' buttons of mouse<br />with your index and middle finger respectively.<br /><br /><br /><br />When you see a small number '1' displayed below the picture of the hand, <br />your task is to lift the SAME finger as your partner on the upcoming trial <br />(e.g. when your partner is lifting his middle finger, you are also required to lift your middle finger).<br /><br />In contrast, when you see the number '2', your task will be to lift the OPPOSITE finger <br />as your partner on the upcoming trial.<br /><br /><br /><br />Please respond as quickly and accurately as possible.<br /><br /><br /><br />-Press any key to start the practice block-<br /><br /><br /><br /><br />" x=0 y=0 z_index=0

define sketchpad Instructions_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Before you start the experiment, you can have a look at the instructions again.<br /><br /><br />In the following experiment, you will be presented with short videos of finger movements.<br /><br />To start a video, hold down both the 'left' & 'right' buttons of mouse<br />with your index and middle finger respectively.<br /><br />When you see a small number '1' displayed below the picture of the hand, <br />your task is to lift the SAME finger as your partner on the upcoming trial <br />(e.g. when your partner is lifting his middle finger, you are also required to lift your middle finger).<br /><br />In contrast, when you see the number '2', your task will be to lift the OPPOSITE finger <br />as your partner on the upcoming trial.<br /><br /><br />Please respond as quickly and accurately as possible.<br /><br /><br /><br /><br />-Press any key to start the experiment-<br />" x=0 y=0 z_index=0

define sketchpad Instructions_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You will also see some lightbulbs on the screen:<br /><br />These will never come on. You can ignore them. <br /><br /><br /><br />Your task is to lift the SAME finger as your partner when you see a small number '1', <br />and to lift the OPPOSITE finger as your partner when you see the number '2'.<br /><br /><br /><br /><br />-Press any key to start the practice block-<br /><br /><br /><br /><br />" x=0 y=0 z_index=0

define sketchpad Instructions_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You will also see some lightbulbs on the screen:<br /><br />These will never come on. You can ignore them. <br /><br /><br /><br />Your task is to lift the SAME finger as your partner when you see a small number '1', <br />and to lift the OPPOSITE finger as your partner when you see the number '2'.<br /><br /><br /><br /><br />-Press any key to start the practice block-<br /><br /><br /><br /><br />" x=0 y=0 z_index=0

define sketchpad Instructions_2_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="There is now also a bonus effect:<br /><br />You can observe that when you and your partner lift the opposite fingers, <br />you will jointly flip the switch <br />and cause the lights to be turned on.<br />This will only happen on those trials where you give the correct response. <br /><br /><br /><br />Your task is not to turn the light on. It is to <br />lift the SAME finger as your partner when you see a small number '1', <br />and to lift the OPPOSITE finger as your partner when you see the number '2'.<br /><br /><br /><br /><br />-Press any key to start the practice block-<br /><br /><br /><br /><br />" x=0 y=0 z_index=0

define sketchpad Instructions_2_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="There is now also a bonus effect:<br /><br />You can observe that when you and your partner lift the opposite fingers, <br />you will jointly flip the switch <br />and cause the lights to be turned on.<br />This will only happen on those trials where you give the correct response. <br /><br /><br /><br />Your task is not to turn the light on. It is to <br />lift the SAME finger as your partner when you see a small number '1', <br />and to lift the OPPOSITE finger as your partner when you see the number '2'.<br /><br /><br /><br /><br />-Press any key to start the practice block-<br /><br /><br /><br /><br />" x=0 y=0 z_index=0

define sketchpad Interblock
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Now you have reached the second half of the experiment. The task is the same as before:<br /><br /><br /><br />When you see a small number '1' displayed below the picture of the hand, <br />your task is to lift the SAME finger as your partner on the upcoming trial <br /> (e.g. when your partner is lifting his middle finger, you are also required to lift your middle finger).<br /><br />In contrast, when you see the number '2', your task will be to lift the OPPOSITE finger <br />as your partner on the upcoming trial.<br /><br /><br /><br />-Press any key to start the practice block-<br /><br /><br />" x=0 y=0 z_index=0

define sketchpad Interblock_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Before you start the second half of the experiment, you can have a look at the instructions again.<br /><br /><br /><br />When you see a small number '1' displayed below the picture of the hand, <br />your task is to lift the SAME finger as your partner on the upcoming trial <br /> (e.g. when your partner is lifting his middle finger, you are also required to lift your middle finger).<br /><br />In contrast, when you see the number '2', your task will be to lift the OPPOSITE finger <br />as your partner on the upcoming trial.<br /><br /><br /><br />-Press any key to start the second half of the experiment-<br /><br /><br />" x=0 y=0 z_index=0

define sketchpad Interblock_ctd
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="There is now no bonus effect:<br /><br />The lightbulbs will not come on. <br /><br /><br /><br />Your task is to lift the SAME finger as your partner when you see a small number '1', <br />and to lift the OPPOSITE finger as your partner when you see the number '2'.<br /><br /><br /><br /><br />-Press any key to start the practice block-<br /><br /><br /><br /><br />" x=0 y=0 z_index=0

define sketchpad Pause
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Take a short break. Press any key to continue!" x=0 y=0 z_index=0

define sketchpad Pause_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Take a short break. Press any key to continue!" x=0 y=0 z_index=0

define sketchpad Pause_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Take a short break. Press any key to continue!" x=0 y=0 z_index=0

define inline_script T_video
	set description "Executes Python code"
	___run__
	import cv2
	import numpy
	import pygame
	import os
	
	#Set the cwd as the exp file directory
	os.chdir(exp.experiment_path)
	
	#check whether the correct backend is used
	if self.get('canvas_backend') == 'legacy':
		surface = exp.surface
	elif self.get('canvas_backend') == 'xpyriment':
		surface = exp.window
	else:
		raise Exception('This script requires legacy or xpyriment (no opengl)')
	
	#create the pygame clock object
	FPSCLOCK=pygame.time.Clock()
	
	#load background images & get their dimensions
	BG_neutral = pygame.image.load('lightbulb0.jpg')
	BG_comp = pygame.image.load('lightbulb0.jpg')
	BG_incomp = pygame.image.load('lightbulb2.jpg')
	BG_black = pygame.image.load('Red_background.jpg')
	BG_i = pygame.image.load('imitate.jpg')
	BG_ci = pygame.image.load('counterimitate.jpg')
	BG_Rect = BG_neutral.get_rect()
	BG_Recti = BG_i.get_rect()
	BG_Rectci = BG_ci.get_rect()
	#create the list for timing the while loop
	time_stamp = []
	
	#Set the accuracy variable
	correct = 0
	end_time = 0
	newKey = 0
	
	# Full path to the video file & open the file
	path = pool[self.get('video')]
	video = cv2.VideoCapture(path)
	
	#initiate the video with a keypress, start the clock and set the background
	key = None
	while key == None:
	   for event in pygame.event.get():
		   if event.type == pygame.MOUSEBUTTONDOWN:
			   pygame.time.delay(1000)
			   pygame.event.get()
			   start_time = self.time()
			   key = event.button
			   BG_Rect.center = surface.get_rect().center
			   surface.blit(BG_neutral, BG_Rect)
			   pygame.display.update
	
	
	################################################################################	
	############################initiate the video loop#############################
	################################################################################
	if self.get('contingency')==1:
		BG_Rect.center = surface.get_rect().center
		surface.blit(BG_i, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
	elif self.get('contingency')==2:
		BG_Rect.center = surface.get_rect().center
		surface.blit(BG_ci, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
	pygame.display.flip()
	pygame.time.delay(2000)
	go = True
	red = True
	while go:
		
		#set the frame rate to 20fps and wait if too fast 
		FPSCLOCK.tick_busy_loop(20)
		
		#get the the start time of each iteration in the loop and appends them in a list
		iteration = self.time()
		time_stamp.append(iteration)
		
		# Get a frame and break the loop if we failed, usually because the video ended.
		success, frame = video.read()
		if not success:
			end_video = self.time()
			break
			
		#for some reasons the frames appeared inverted & flipped
		frame = numpy.fliplr(frame)
		frame = numpy.rot90(frame)
		
		# The video uses BGR colors and PyGame needs RGB
		frame = cv2.cvtColor(frame, cv2.COLOR_BGR2RGB)
		
		# Create a PyGame surface
		surf = pygame.surfarray.make_surface(frame)
	
		# Get key release time
		for event in pygame.event.get():
			
			if event.type == pygame.QUIT:
				pygame.quit()
				
			elif event.type == pygame.MOUSEBUTTONUP:
				
				#get pygame key name
				newKey=event.button
				
				# & change background image for incompatible and correct trials
				if red == True:
					if newKey == self.get('contingent_action') and self.get('compatibility')== "compatible":
						end_time = self.time()
						correct = 1
						surface.blit(BG_comp,BG_Rect)
						pygame.display.update
					
					elif newKey == self.get('contingent_action') and self.get('compatibility')== "incompatible":
						end_time = self.time()
						correct = 1
						surface.blit(BG_incomp,BG_Rect)
						pygame.display.update
					
					else:
						end_time = self.time()
						surface.blit(BG_black,BG_Rect)
						pygame.display.update
						red = False
						correct = 0
		# Show the PyGame surface!
		surface.blit(surf, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
		pygame.display.flip()
		
	################################################################################	
	###########################Compute experimental variables#######################
	################################################################################
	
	#Get the delay between first frame and loop initiation time
	first_frame = time_stamp[0]
	delay = first_frame-start_time
	
	#compute the duration of the video for timing verification purposes
	duree_video = end_video-start_time
	
	#Create the key release time variable
	rt = end_time-start_time
	
	
	
	################################################################################
	#########################Create Opensesame variables############################
	################################################################################
	
	exp.set('accuracy', correct)
	exp.set('keyresponse', newKey)
	exp.set('time_delay_RT', delay)
	exp.set('video_duration', duree_video)
	exp.set('keyreleaseRT', rt)
	exp.set('Trial','Test')
	exp.set('Group','jointLast')
	
	################################################################################
	#############################Print some variables###############################
	################################################################################
	
	print '-------------------------- Trial %d --------------------------------' % (var.count_Trial_2+1)
	print '%d ms delay' % (delay)
	print 'the video lasted %d ms' % (duree_video)
	print '%s was released after %d ms' % (newKey, rt)
	if correct == 1:
		print 'The trial was correct'
	else:
		print 'The trial was incorrect'
	__end__
	set _prepare ""

define inline_script T_video_1
	set description "Executes Python code"
	___run__
	import cv2
	import numpy
	import pygame
	import os
	
	#Set the cwd as the exp file directory
	os.chdir(exp.experiment_path)
	
	#check whether the correct backend is used
	if self.get('canvas_backend') == 'legacy':
		surface = exp.surface
	elif self.get('canvas_backend') == 'xpyriment':
		surface = exp.window
	else:
		raise Exception('This script requires legacy or xpyriment (no opengl)')
	
	#create the pygame clock object
	FPSCLOCK=pygame.time.Clock()
	
	#load background images & get their dimensions
	BG_neutral = pygame.image.load('lightbulb0.jpg')
	BG_comp = pygame.image.load('lightbulb0.jpg')
	BG_incomp = pygame.image.load('lightbulb2.jpg')
	BG_black = pygame.image.load('Red_background.jpg')
	BG_Rect = BG_neutral.get_rect()
	BG_i = pygame.image.load('imitate.jpg')
	BG_ci = pygame.image.load('counterimitate.jpg')
	#create the list for timing the while loop
	time_stamp = []
	
	#Set the accuracy variable
	correct = 0
	end_time = 0
	newKey = 0
	
	# Full path to the video file & open the file
	path = pool[self.get('video')]
	video = cv2.VideoCapture(path)
	
	#initiate the video with a keypress, start the clock and set the background
	key = None
	while key == None:
	   for event in pygame.event.get():
		   if event.type == pygame.MOUSEBUTTONDOWN:
			   pygame.time.delay(1000)	   
			   pygame.event.get()
			   start_time = self.time()
			   key = event.button
			   BG_Rect.center = surface.get_rect().center
			   surface.blit(BG_neutral, BG_Rect)
			   pygame.display.update
	
	
	################################################################################	
	############################initiate the video loop#############################
	################################################################################
	if self.get('contingency')==1:
		BG_Rect.center = surface.get_rect().center
		surface.blit(BG_i, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
	elif self.get('contingency')==2:
		BG_Rect.center = surface.get_rect().center
		surface.blit(BG_ci, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
	pygame.display.flip()
	pygame.time.delay(2000)
	go = True
	red = True
	while go:
		
		#set the frame rate to 20fps and wait if too fast 
		FPSCLOCK.tick_busy_loop(20)
		
		#get the the start time of each iteration in the loop and appends them in a list
		iteration = self.time()
		time_stamp.append(iteration)
		
		# Get a frame and break the loop if we failed, usually because the video ended.
		success, frame = video.read()
		if not success:
			end_video = self.time()
			break
			
		#for some reasons the frames appeared inverted & flipped
		frame = numpy.fliplr(frame)
		frame = numpy.rot90(frame)
		
		# The video uses BGR colors and PyGame needs RGB
		frame = cv2.cvtColor(frame, cv2.COLOR_BGR2RGB)
		
		# Create a PyGame surface
		surf = pygame.surfarray.make_surface(frame)
	
		# Get key release time
		for event in pygame.event.get():
			
			if event.type == pygame.QUIT:
				pygame.quit()
				
			elif event.type == pygame.MOUSEBUTTONUP:
				
				#get pygame key name
				newKey=event.button
				
				# & change background image for incompatible and correct trials
				if red == True:
					if newKey == self.get('contingent_action') and self.get('compatibility')== "compatible":
						end_time = self.time()
						correct = 1
						surface.blit(BG_comp,BG_Rect)
						pygame.display.update
						
					elif newKey == self.get('contingent_action') and self.get('compatibility')== "incompatible":
						end_time = self.time()
						correct = 1
						surface.blit(BG_incomp,BG_Rect)
						pygame.display.update
					
					else:
						end_time = self.time()
						surface.blit(BG_black,BG_Rect)
						pygame.display.update
						red = False
						correct = 0
		# Show the PyGame surface!
		surface.blit(surf, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
		pygame.display.flip()
		
	################################################################################	
	###########################Compute experimental variables#######################
	################################################################################
	
	#Get the delay between first frame and loop initiation time
	first_frame = time_stamp[0]
	delay = first_frame-start_time
	
	#compute the duration of the video for timing verification purposes
	duree_video = end_video-start_time
	
	#Create the key release time variable
	rt = end_time-start_time
	
	
	
	################################################################################
	#########################Create Opensesame variables############################
	################################################################################
	
	exp.set('accuracy', correct)
	exp.set('keyresponse', newKey)
	exp.set('time_delay_RT', delay)
	exp.set('video_duration', duree_video)
	exp.set('keyreleaseRT', rt)
	exp.set('Trial','Test_1')
	exp.set('Group','jointLast')
	
	################################################################################
	#############################Print some variables###############################
	################################################################################
	
	print '-------------------------- Trial %d --------------------------------' % (var.count_Trial_2+1)
	print '%d ms delay' % (delay)
	print 'the video lasted %d ms' % (duree_video)
	print '%s was released after %d ms' % (newKey, rt)
	if correct == 1:
		print 'The trial was correct'
	else:
		print 'The trial was incorrect'
	__end__
	set _prepare ""

define loop Test
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_2
	set description "Exécuter un autre item plusieurs fois"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response "1"
	setcycle 0 contingency "1"
	setcycle 0 video "1_index.avi"
	setcycle 0 compatibility "compatible"
	setcycle 0 contingent_action "1"
	setcycle 1 correct_response "3"
	setcycle 1 contingency "1"
	setcycle 1 video "1_middle.avi"
	setcycle 1 compatibility "compatible"
	setcycle 1 contingent_action "3"
	setcycle 2 correct_response "3"
	setcycle 2 contingency "2"
	setcycle 2 video "2_index.avi"
	setcycle 2 compatibility "incompatible"
	setcycle 2 contingent_action "3"
	setcycle 3 correct_response "1"
	setcycle 3 contingency "2"
	setcycle 3 video "2_middle.avi"
	setcycle 3 compatibility "incompatible"
	setcycle 3 contingent_action "1"
	run Trial_2

define loop Test_1
	set source_file ""
	set source table
	set skip 0
	set repeat 20
	set order random
	set offset no
	set item Trial_2_1
	set description "Exécuter un autre item plusieurs fois"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response "1"
	setcycle 0 contingency "1"
	setcycle 0 video "1_index.avi"
	setcycle 0 compatibility "compatible"
	setcycle 0 contingent_action "1"
	setcycle 1 correct_response "3"
	setcycle 1 contingency "1"
	setcycle 1 video "1_middle.avi"
	setcycle 1 compatibility "compatible"
	setcycle 1 contingent_action "3"
	setcycle 2 correct_response "3"
	setcycle 2 contingency "2"
	setcycle 2 video "2_index.avi"
	setcycle 2 compatibility "incompatible"
	setcycle 2 contingent_action "3"
	setcycle 3 correct_response "1"
	setcycle 3 contingency "2"
	setcycle 3 video "2_middle.avi"
	setcycle 3 compatibility "incompatible"
	setcycle 3 contingent_action "1"
	run Trial_2_1

define sequence Trial_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Fixation always
	run B_video always
	run Black_screen always
	run log always
	run Pause "[count_Trial_1] = 44"

define sequence Trial_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Fixation_1 always
	run B_video_1 always
	run Black_screen_1 always
	run log always
	run Pause_1 "[count_Trial_1] = 44"

define sequence Trial_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Fixation always
	run T_video always
	run Black_screen always
	run log always
	run Pause "[count_Trial_2] =  44 "

define sequence Trial_2_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Fixation_2 always
	run T_video_1 always
	run Black_screen_2 always
	run log always
	run Pause_2 "[count_Trial_2] =  44 "

define sketchpad Welcome
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welcome to the experiment!<br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br />-Press any key to continue-" x=0 y=96 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run Welcome always
	run Instructions always
	run Instructions_2 always
	run Baseline always
	run Instructions_1 always
	run Instructions_2_1 always
	run Baseline_1 always
	run Interblock always
	run Instructions_2_2 always
	run Test always
	run Interblock_1 always
	run Instructions_2_2_1 always
	run Test_1 always
	run Bye always

define logger log
	set description "Logs experimental data"
	set auto_log yes

