---
API: 2
OpenSesame: 3.1.3
Platform: nt
---
set width 1280
set uniform_coordinates yes
set title "Nouvelle expérience"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 720
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set expyriment_opengl no
set experiment_path "D:\\My Documents\\Brass Project\\Brass_JointGoal"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define inline_script B_video
	set description "Executes Python code"
	___run__
	import cv2
	import numpy
	import pygame
	import os
	
	#Set the cwd as the exp file directory
	os.chdir(exp.experiment_path)
	
	#check whether the correct backend is used
	if self.get('canvas_backend') == 'legacy':
		surface = exp.surface
	elif self.get('canvas_backend') == 'xpyriment':
		surface = exp.window
	else:
		raise Exception('This script requires legacy or xpyriment (no opengl)')
	
	#create the pygame clock object
	FPSCLOCK=pygame.time.Clock()
	
	#load background images & get their dimensions
	BG_neutral = pygame.image.load('Blackground.jpg')
	BG_Rect = BG_neutral.get_rect()
	
	#create the list for timing the while loop
	time_stamp = []
	
	#Set the accuracy variable
	correct = 0
	
	# Full path to the video file & open the file
	path = pool[self.get('video')]
	video = cv2.VideoCapture(path)
	
	#initiate the video with a keypress, start the clock and set the background
	key = None
	while key == None:
	   for event in pygame.event.get():
		   if event.type == pygame.KEYDOWN:
			   pygame.time.delay(1000)
			   start_time = self.time()
			   key = event.key
			   BG_Rect.center = surface.get_rect().center
			   surface.blit(BG_neutral, BG_Rect)
			   pygame.display.update
			   go = True
	
	################################################################################	
	############################initiate the video loop#############################
	################################################################################
	
	while go:
		
		#set the frame rate to 20fps and wait if too fast 
		FPSCLOCK.tick_busy_loop(20)
		
		#get the the start time of each iteration in the loop and appends them in a list
		iteration = self.time()
		time_stamp.append(iteration)
		
		# Get a frame and break the loop if we failed, usually because the video ended.
		success, frame = video.read()
		if not success:
			end_video = self.time()
			break
			
		#for some reasons the frames appeared inverted & flipped
		frame = numpy.fliplr(frame)
		frame = numpy.rot90(frame)
		
		# The video uses BGR colors and PyGame needs RGB
		frame = cv2.cvtColor(frame, cv2.COLOR_BGR2RGB)
		
		# Create a PyGame surface
		surf = pygame.surfarray.make_surface(frame)
	
		# Get key release time
		for event in pygame.event.get():
			
			if event.type == pygame.QUIT:
				pygame.quit()
				
			elif event.type == pygame.KEYUP:
				
				#get pygame key name
				newKey=pygame.key.name(event.key)
				end_time = self.time()
						
		# Show the PyGame surface!
		surface.blit(surf, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
		pygame.display.flip()
		
	################################################################################	
	###########################Compute experimental variables#######################
	################################################################################
	
	#Get the delay between first frame and loop initiation time
	first_frame = time_stamp[0]
	delay = first_frame-start_time
	
	#compute the duration of the video for timing verification purposes
	duree_video = end_video-start_time
	
	#Create the key release time variable
	rt = end_time-start_time
	
	#Create the accuracy variable	
	if newKey == self.get('correct_response'):
		correct = 1
	else:
		correct = 0
	
	################################################################################
	#########################Create Opensesame variables############################
	################################################################################
	
	exp.set('accuracy', correct)
	exp.set('keyresponse', newKey)
	exp.set('time_delay_RT', delay)
	exp.set('video_duration', duree_video)
	exp.set('keyreleaseRT', rt)
	
	################################################################################
	#############################Print some variables###############################
	################################################################################
	
	print '-------------------------- Trial %d --------------------------------' % (var.count_Trial_1+1)
	print '%d ms delay' % (delay)
	print 'the video lasted %d ms' % (duree_video)
	print '%s was released after %d ms' % (newKey, rt)
	if correct == 1:
		print 'The trial was correct'
	else:
		print 'The trial was incorrect'
	__end__
	set _prepare ""

define loop Baseline
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response "[1]"
	setcycle 0 compatibility baseline
	setcycle 0 contingency 0
	setcycle 0 contingent_action ""
	setcycle 0 video "1_base.avi"
	setcycle 1 correct_response "[1]"
	setcycle 1 compatibility compatible
	setcycle 1 contingency 0
	setcycle 1 contingent_action "[2]"
	setcycle 1 video "1_index.avi"
	setcycle 2 correct_response "[1]"
	setcycle 2 compatibility incompatible
	setcycle 2 contingency 1
	setcycle 2 contingent_action "[1]"
	setcycle 2 video "1_middle.avi"
	setcycle 3 correct_response "[2]"
	setcycle 3 compatibility baseline
	setcycle 3 contingency 0
	setcycle 3 contingent_action ""
	setcycle 3 video "2_base.avi"
	setcycle 4 correct_response "[2]"
	setcycle 4 compatibility incompatible
	setcycle 4 contingency 1
	setcycle 4 contingent_action "[2]"
	setcycle 4 video "2_index.avi"
	setcycle 5 correct_response "[2]"
	setcycle 5 compatibility compatible
	setcycle 5 contingency 0
	setcycle 5 contingent_action "[1]"
	setcycle 5 video "2_middle.avi"
	run Trial_1

define sketchpad Black_screen
	set duration 1500
	set description "Displays stimuli"

define sketchpad Fixation
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please press the '1' & '2' keys of the numerical pad" x=0 y=0 z_index=0

define sketchpad Instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In the follozing experiment, you will be presented with short videos of finger movements.<br /><br />To start a video, maintain a pressure on both the '1' & '2' keys of the numerical pad<br />with your index and middle finger respectively.<br /><br />A number will appear superimposed on the videos. You task is:<br /><br />- To lift your INDEX FINGER  if that number is a '1' (i.e., releasing the '1' key of the numerical pad)<br /><br /> - To lift your MIDDLE FINGER if that number is a '2' (i.e., releasing the '2' key of the numerical pad)   <br /><br /><br />Please respond as fast as possible, minimizing the number of errors.<br /><br /><br /><br />-Press any key to start the experiment-" x=0 y=64 z_index=0

define sketchpad Pause
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Have a short break. Press any key to continue!" x=0 y=0 z_index=0

define inline_script T_video
	set description "Executes Python code"
	___run__
	import cv2
	import numpy
	import pygame
	import os
	
	#Set the cwd as the exp file directory
	os.chdir(exp.experiment_path)
	
	#check whether the correct backend is used
	if self.get('canvas_backend') == 'legacy':
		surface = exp.surface
	elif self.get('canvas_backend') == 'xpyriment':
		surface = exp.window
	else:
		raise Exception('This script requires legacy or xpyriment (no opengl)')
	
	#create the pygame clock object
	FPSCLOCK=pygame.time.Clock()
	
	#load background images & get their dimensions
	BG_neutral = pygame.image.load('lightbulb1.jpg')
	BG_change = pygame.image.load('lightbulb2.jpg')
	BG_Rect = BG_neutral.get_rect()
	
	#create the list for timing the while loop
	time_stamp = []
	
	#Set the accuracy variable
	correct = 0
	
	# Full path to the video file & open the file
	path = pool[self.get('video')]
	video = cv2.VideoCapture(path)
	
	#initiate the video with a keypress, start the clock and set the background
	key = None
	while key == None:
	   for event in pygame.event.get():
		   if event.type == pygame.KEYDOWN:
			   pygame.time.delay(1000)
			   start_time = self.time()
			   key = event.key
			   BG_Rect.center = surface.get_rect().center
			   surface.blit(BG_neutral, BG_Rect)
			   pygame.display.update
			   go = True
	
	################################################################################	
	############################initiate the video loop#############################
	################################################################################
	
	while go:
		
		#set the frame rate to 20fps and wait if too fast 
		FPSCLOCK.tick_busy_loop(20)
		
		#get the the start time of each iteration in the loop and appends them in a list
		iteration = self.time()
		time_stamp.append(iteration)
		
		# Get a frame and break the loop if we failed, usually because the video ended.
		success, frame = video.read()
		if not success:
			end_video = self.time()
			break
			
		#for some reasons the frames appeared inverted & flipped
		frame = numpy.fliplr(frame)
		frame = numpy.rot90(frame)
		
		# The video uses BGR colors and PyGame needs RGB
		frame = cv2.cvtColor(frame, cv2.COLOR_BGR2RGB)
		
		# Create a PyGame surface
		surf = pygame.surfarray.make_surface(frame)
	
		# Get key release time
		for event in pygame.event.get():
			
			if event.type == pygame.QUIT:
				pygame.quit()
				
			elif event.type == pygame.KEYUP:
				
				#get pygame key name
				newKey=pygame.key.name(event.key)
				
				# & change background image for incompatible trials
				if  newKey == self.get('contingent_action'):
					end_time = self.time()
					surface.blit(BG_change,BG_Rect)
					pygame.display.update
					
				else:
					end_time = self.time()
					surface.blit(BG_neutral,BG_Rect)
					pygame.display.update
	
				
		# Show the PyGame surface!
		surface.blit(surf, ((surface.get_rect().centerx-150),(surface.get_rect().centery-100)))
		pygame.display.flip()
		
	################################################################################	
	###########################Compute experimental variables#######################
	################################################################################
	
	#Get the delay between first frame and loop initiation time
	first_frame = time_stamp[0]
	delay = first_frame-start_time
	
	#compute the duration of the video for timing verification purposes
	duree_video = end_video-start_time
	
	#Create the key release time variable
	rt = end_time-start_time
	
	#Create the accuracy variable	
	if newKey == self.get('correct_response'):
		correct = 1
	else:
		correct = 0
	
	################################################################################
	#########################Create Opensesame variables############################
	################################################################################
	
	exp.set('accuracy', correct)
	exp.set('keyresponse', newKey)
	exp.set('time_delay_RT', delay)
	exp.set('video_duration', duree_video)
	exp.set('keyreleaseRT', rt)
	
	################################################################################
	#############################Print some variables###############################
	################################################################################
	
	print '-------------------------- Trial %d --------------------------------' % (var.count_Trial_2+1)
	print '%d ms delay' % (delay)
	print 'the video lasted %d ms' % (duree_video)
	print '%s was released after %d ms' % (newKey, rt)
	if correct == 1:
		print 'The trial was correct'
	else:
		print 'The trial was incorrect'
	__end__
	set _prepare ""

define loop Test
	set source_file ""
	set source table
	set repeat 15
	set order random
	set description "Exécuter un autre item plusieurs fois"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 video "1_base.avi"
	setcycle 0 correct_response "[1]"
	setcycle 0 compatibility baseline
	setcycle 0 contingency 0
	setcycle 0 contingent_action ""
	setcycle 1 video "1_index.avi"
	setcycle 1 correct_response "[1]"
	setcycle 1 compatibility compatible
	setcycle 1 contingency 0
	setcycle 1 contingent_action "[2]"
	setcycle 2 video "1_middle.avi"
	setcycle 2 correct_response "[1]"
	setcycle 2 compatibility incompatible
	setcycle 2 contingency 1
	setcycle 2 contingent_action "[1]"
	setcycle 3 video "2_base.avi"
	setcycle 3 correct_response "[2]"
	setcycle 3 compatibility baseline
	setcycle 3 contingency 0
	setcycle 3 contingent_action ""
	setcycle 4 video "2_index.avi"
	setcycle 4 correct_response "[2]"
	setcycle 4 compatibility incompatible
	setcycle 4 contingency 1
	setcycle 4 contingent_action "[2]"
	setcycle 5 video "2_middle.avi"
	setcycle 5 correct_response "[2]"
	setcycle 5 compatibility compatible
	setcycle 5 contingency 0
	setcycle 5 contingent_action "[1]"
	run Trial_2

define sequence Trial_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Fixation always
	run B_video always
	run Black_screen always
	run log always
	run Pause "[count_Trial_1] = 44"

define sequence Trial_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Fixation always
	run T_video always
	run Black_screen always
	run log always
	run Pause "[count_Trial_2] =  44 "

define sketchpad Welcome
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welcome in this experiment !<br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br /><br />-Press any key to continue-" x=0 y=96 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run Welcome always
	run Instructions always
	run Baseline always
	run Test always

define logger log
	set description "Logs experimental data"
	set auto_log yes

